PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = black
  expName = Go-No Go
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Routines
  Routine hi
    KeyboardComponent start
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press
      letterHeight = 25
      pos = (0, -350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press enter to continue
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    ImageComponent instructions
      image = images/Intro1.bmp
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent bye
      letterHeight = 35
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine task_ITI
    TextComponent runITI
      color = black
      letterHeight = 70
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
      text = boo
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  Routine task_run
    KeyboardComponent run_response
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrans
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    TextComponent text
      letterHeight = 70
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text [set every repeat] = $stim
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  Routine ready_2
    TextComponent ready
      letterHeight = 70
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Get Ready!
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  Routine practice_run
    KeyboardComponent practice_response
      allowedKeys [set every repeat] = 'space'
      correctAns = $corrans
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      store = nothing
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    TextComponent practice_text
      letterHeight = 70
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text [set every repeat] = $stim
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  Routine practice_ITI
    TextComponent ITIprac
      color = black
      letterHeight = 70
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
      text = boo
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  Routine hi_2
    KeyboardComponent start_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_2
      letterHeight = 25
      pos = (0, -350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press enter to begin the test
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    ImageComponent instructions_2
      image = images/Intro2.bmp
      pos = (0, 75)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine hi_3
    KeyboardComponent start_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_3
      letterHeight = 25
      pos = (0, -350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press enter to begin the test
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    ImageComponent instructions_3
      image = images/Intro3.bmp
      pos = (0, 75)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine hi
  Routine ready_2
  LoopInitiator practicetrials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'X'), ('ITI', 0.75)]),
      OrderedDict([('stim', 'X'), ('ITI', 1.75)]),
      OrderedDict([('stim', 'K'), ('ITI', 0.75)]),
      OrderedDict([('stim', 'X'), ('ITI', 0.75)]),
      OrderedDict([('stim', 'X'), ('ITI', 2.75)]),
      OrderedDict([('stim', 'X'), ('ITI', 1.75)]),
      OrderedDict([('stim', 'K'), ('ITI', 0.75)]),
      OrderedDict([('stim', 'X'), ('ITI', 0.75)])]
    Routine practice_run
    Routine practice_ITI
  LoopTerminator practicetrials
  Routine hi_2
  Routine ready_2
  LoopInitiator run1 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'N'), ('stim', 'K'), ('ITI', 0.375), ('corrans', None)]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'N'), ('stim', 'K'), ('ITI', 0.375), ('corrans', None)]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')])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
    Routine task_run
    Routine task_ITI
  LoopTerminator run1
  Routine hi_3
  Routine ready_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'N'), ('stim', 'K'), ('ITI', 0.375), ('corrans', None)]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'N'), ('stim', 'K'), ('ITI', 0.375), ('corrans', None)]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.875), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 1.375), ('corrans', 'space')]),
      OrderedDict([('trialtype', 'G'), ('stim', 'X'), ('ITI', 0.375), ('corrans', 'space')])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
    Routine task_run
    Routine task_ITI
  LoopTerminator trials
  Routine end
